PsychoPy2experiment version="3.1.3"
Settings
  Experiment info = {'participant': '', 'version': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = MarinasExperiment
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Routines
  Routine trial
  Routine Instructions
    TextComponent Instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Καλώς ήρθατε στο πείραμα μου!

        Οδηγίες: Στην αρχή κάθε πρότασης θα εμφανίζεται ένας σταυρός σηματοδοτώντας την αρχή της αντίστοιχης πρότασης.

        Η πρόταση θα εμφανίζεται λέξη προς λέξη. Για να προχωρήσετε κάθε φορά πατήστε το space bar.

        Στο τέλος κάθε πρότασης θα σας ζητείται να αξιολογήσετε την πρόταση που μόλις διαβάσατε.

        Για να αξιολογήσετε σύρετε με το δεξί κλικ το τρίγωνο προς μία από τις 2 κατευθύνσεις.

        Πατήστε τώρα το space bar για να κάνετε εξάσκηση.
    KeyboardComponent SpaceMoveInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        item=0
        example=0
      Begin JS Experiment:
        var example, item;

        window.example = 0;

        window.item = 0;
  Routine Practice
    TextComponent PracticeText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Οι παρακάτω τέσερρις προτάσεις είναι για εξάσκηση.

        Πατήστε το space bar για να προχωρήσετε.
    KeyboardComponent SpaceMovePract
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Example_Fixation
    TextComponent ExampleFix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = +
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    KeyboardComponent SpaceMoveExamp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        window.example +=1;
      Begin Routine:
        example=example+1
  Routine Example_Sentences
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $eval("E%s" % (example))
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    KeyboardComponent SpaceMoveExampSent
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rating
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 3
      labels = 1=Σωστή, 2=Ενδιάμεσο, 3=Λάθος
      low = 1
      marker = slider
      pos = 0, -0.4
      scaleDescription = Παρακαλώ αξιολογήστε την πρόταση που μόλις διαβάσατε. 
      size = 1.0
      startVal [time (s)] = 0.0
      visualAnalogScale = True
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StartingText
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Τώρα είστε έτοιμοι να ξεκινήσετε.

        Πατήστε το space για την πρώτη πρόταση.

                    :)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Experiment_Fixation
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        window.item +=1;
      Begin Routine:
        item=item+1
  Routine Experiment_Sentences
    TextComponent ExpSent
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $eval("S%s" % (item)) 
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Exp_Rating
    RatingScaleComponent ExpRating
      forceEndRoutine = True
      high = 3
      labels = 1=Σωστή, 2=Ενδιάμεσο, 3=Λάθος
      low = 1
      pos = 0, -0.4
      scaleDescription = Παρακαλώ αξιολογήστε την πρόταση που μόλις διαβάσατε. 
      size = 1.0
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndMessage
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every frame]:
        Τέλος πειράματος

        Σας ευχαριστώ πολύ που πήρατε μέρος.

                      Γειά σας!
Flow
  Routine Instructions
  Routine Practice
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine Example_Fixation
    LoopInitiator ExampLoop loopType="TrialHandler"
      Selected rows = 0:9
      conditionsFile = $'Last_Exp_Sentences'+expInfo['version']+'.xlsx'
      loopType = sequential
      nReps = 1
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      Routine Example_Sentences
    LoopTerminator ExampLoop
    Routine Rating
  LoopTerminator trials
  Routine StartingText
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    Routine Experiment_Fixation
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = 0:9
      conditionsFile = $'Last_Exp_Sentences'+expInfo['version']+'.xlsx'
      loopType = sequential
      nReps = 1
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      Routine Experiment_Sentences
    LoopTerminator trials_2
    Routine Exp_Rating
  LoopTerminator trials_3
  Routine EndMessage
